WorkflowBuilder(Version=2.9.1)
Annotation 1.(Text="")
-> Annotation "Set ai channel corresponding to your wiring"(Text="Set ai channel corresponding to your wiring") => #1
Annotation "SampleRate: 1MHz or highest possible"(Text="SampleRate: 1MHz or highest possible") => #2
#1, #2 -> Bonsai.DAQmx.AnalogInput => #3
  SignalSource=""
  SampleRate=1000000
  ActiveEdge=Rising
  SampleMode=ContinuousSamples
  BufferSize=100000
  SamplesPerChannel=nil
  Channels
    AnalogInputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai16, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai17, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai18, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai19, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai20, TerminalConfiguration=Differential, VoltageUnits=Volts)
Annotation 2.(Text="")
-> Annotation "Set save-path"(Text="Set save-path") => #5
#3, #5 -> Bonsai.Dsp.MatrixWriter(Path=Recording001.bin, Suffix=None, Overwrite=true, Layout=ColumnMajor)

Annotation 3.(Text="")
-> Annotation "Set COM port"(Text="Set COM port")
-> BehaviorSubject<Bonsai.Harp.HarpMessage> QuacMessages
-> AllenNeuralDynamics.Quac.Device(OperationMode=Active, OperationLed=On, DumpRegisters=false, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM4)
-> PublishSubject QuacEvents

SubscribeSubject QuacEvents
-> MemberSelector(Selector=MessageBytes) => #13
Annotation 4.(Text="")
-> Annotation "Set other save-path"(Text="Set other save-path") => #15
#13, #15 -> Bonsai.Dsp.MatrixWriter(Path=Quac001.bin, Suffix=Timestamp, Overwrite=true, Layout=ColumnMajor)

Annotation "Stop any currently playing payloads"(Text="Stop any currently playing payloads")
-> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateDacAbortPayload(DacAbort="AO0 AO1 AO2 AO3"))
-> MulticastSubject QuacMessages => #19
Annotation InitialDelay(Text=InitialDelay) => #20
#19, #20 -> Delay(DueTime=PT0.5S)
-> FloatProperty(Value=0) => #22
Annotation "Ext. Trigger AOs 10000x"(Text="Ext. Trigger AOs 10000x")
-> Defer TriggeredAOToggle
    Annotation "Configure for Latency Check"(Text="Configure for Latency Check")
    -> Defer "Configure All AOs triggered from DI0" => #1
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreatePinModeDI0Payload(PinModeDI0=ExternalTrigger))
        -> MulticastSubject QuacMessages => #1
        Annotation "Incorrectly lists AOs as DIs"(Text="Incorrectly lists AOs as DIs")
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateAOChannelsAssignedToDI0Payload(AOChannelsAssignedToDI0="DI0 DI1 DI2 DI3"))
        -> MulticastSubject QuacMessages => #4
        #1, #4 -> Concat
        -> TakeLast(Count=1)
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    Defer ConfigureAllChannels
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer0Payload(ActivePlayer0=Trapezoid))
        -> MulticastSubject QuacMessages => #1
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer1Payload(ActivePlayer1=Trapezoid))
        -> MulticastSubject QuacMessages => #3
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer2Payload(ActivePlayer2=Trapezoid))
        -> MulticastSubject QuacMessages => #5
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer3Payload(ActivePlayer3=Trapezoid))
        -> MulticastSubject QuacMessages => #7
        AllenNeuralDynamics.Quac.CreateMessage
          MessageType=Write
          Payload=AllenNeuralDynamics.Quac.CreateTrapezoidSettings0Payload
            Cycles=1
            Duration=1000
            UpdateFrequency=500000
            Frequency=1000
            Amplitude=2.5
            VerticalShift=1.25
            NormalizedPhaseShift=0
            RampOnDuration=0
            PulseWidthDuration=500
            RampOffDuration=0
        -> MulticastSubject QuacMessages => #9
        AllenNeuralDynamics.Quac.CreateMessage
          MessageType=Write
          Payload=AllenNeuralDynamics.Quac.CreateTrapezoidSettings1Payload
            Cycles=1
            Duration=1000
            UpdateFrequency=500000
            Frequency=1000
            Amplitude=2.5
            VerticalShift=1.25
            NormalizedPhaseShift=0
            RampOnDuration=0
            PulseWidthDuration=500
            RampOffDuration=0
        -> MulticastSubject QuacMessages => #11
        AllenNeuralDynamics.Quac.CreateMessage
          MessageType=Write
          Payload=AllenNeuralDynamics.Quac.CreateTrapezoidSettings2Payload
            Cycles=1
            Duration=1000
            UpdateFrequency=500000
            Frequency=1000
            Amplitude=2.5
            VerticalShift=1.25
            NormalizedPhaseShift=0
            RampOnDuration=0
            PulseWidthDuration=500
            RampOffDuration=0
        -> MulticastSubject QuacMessages => #13
        AllenNeuralDynamics.Quac.CreateMessage
          MessageType=Write
          Payload=AllenNeuralDynamics.Quac.CreateTrapezoidSettings3Payload
            Cycles=1
            Duration=1000
            UpdateFrequency=500000
            Frequency=1000
            Amplitude=2.5
            VerticalShift=1.25
            NormalizedPhaseShift=0
            RampOnDuration=0
            PulseWidthDuration=500
            RampOffDuration=0
        -> MulticastSubject QuacMessages => #15
        #1, #3, #5, #7, #9, #11, #13, #15 -> Concat
        -> TakeLast(Count=1)
        -> Delay(DueTime=PT0.01S)
        -> WorkflowOutput
    -> Delay(DueTime=PT1S)
    -> FloatProperty(Value=0) => #4
    Defer "Send Trigger on DO0"(Description="Send Trigger on DO0")
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateDOPortSetPayload(DOPortSet=DO0))
        -> MulticastSubject QuacMessages
        -> Delay(DueTime=PT0.001S)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateDOPortClearPayload(DOPortClear=DO0))
        -> MulticastSubject QuacMessages
        -> WorkflowOutput
    -> Delay(DueTime=PT0.001S) => #6
    ExternalizedMapping(Count(DisplayName=NumberOfTriggers)) => #7
    #6, #7 -> RepeatCount(Count=10000)
    -> FloatProperty(Value=0) => #9
    #1, #4, #9 -> Concat
    -> TakeLast(Count=1)
    -> WorkflowOutput
-> FloatProperty(Value=0) => #25
Annotation "Ext. Trigger AOs 1000x"(Text="Ext. Trigger AOs 1000x")
-> Defer TriggeredTrapezoids
    Annotation "Configure for Latency Check"(Text="Configure for Latency Check")
    -> Defer "Configure All AOs triggered from DI0" => #1
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreatePinModeDI0Payload(PinModeDI0=ExternalTrigger))
        -> MulticastSubject QuacMessages => #1
        Annotation "Incorrectly lists AOs as DIs"(Text="Incorrectly lists AOs as DIs")
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateAOChannelsAssignedToDI0Payload(AOChannelsAssignedToDI0="DI0 DI1 DI2 DI3"))
        -> MulticastSubject QuacMessages => #4
        #1, #4 -> Concat
        -> TakeLast(Count=1)
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    Defer ConfigureAllChannels
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer0Payload(ActivePlayer0=Trapezoid))
        -> MulticastSubject QuacMessages => #1
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer1Payload(ActivePlayer1=Trapezoid))
        -> MulticastSubject QuacMessages => #3
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer2Payload(ActivePlayer2=Trapezoid))
        -> MulticastSubject QuacMessages => #5
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer3Payload(ActivePlayer3=Trapezoid))
        -> MulticastSubject QuacMessages => #7
        AllenNeuralDynamics.Quac.CreateMessage
          MessageType=Write
          Payload=AllenNeuralDynamics.Quac.CreateTrapezoidSettings0Payload
            Cycles=10000
            Duration=1000
            UpdateFrequency=500000
            Frequency=1000
            Amplitude=2.5
            VerticalShift=1.25
            NormalizedPhaseShift=0
            RampOnDuration=50
            PulseWidthDuration=500
            RampOffDuration=50
        -> MulticastSubject QuacMessages => #9
        AllenNeuralDynamics.Quac.CreateMessage
          MessageType=Write
          Payload=AllenNeuralDynamics.Quac.CreateTrapezoidSettings1Payload
            Cycles=10000
            Duration=1000
            UpdateFrequency=500000
            Frequency=1000
            Amplitude=2.5
            VerticalShift=1.25
            NormalizedPhaseShift=0
            RampOnDuration=50
            PulseWidthDuration=500
            RampOffDuration=50
        -> MulticastSubject QuacMessages => #11
        AllenNeuralDynamics.Quac.CreateMessage
          MessageType=Write
          Payload=AllenNeuralDynamics.Quac.CreateTrapezoidSettings2Payload
            Cycles=10000
            Duration=1000
            UpdateFrequency=500000
            Frequency=1000
            Amplitude=2.5
            VerticalShift=1.25
            NormalizedPhaseShift=0
            RampOnDuration=50
            PulseWidthDuration=500
            RampOffDuration=50
        -> MulticastSubject QuacMessages => #13
        AllenNeuralDynamics.Quac.CreateMessage
          MessageType=Write
          Payload=AllenNeuralDynamics.Quac.CreateTrapezoidSettings3Payload
            Cycles=10000
            Duration=1000
            UpdateFrequency=500000
            Frequency=1000
            Amplitude=2.5
            VerticalShift=1.25
            NormalizedPhaseShift=0
            RampOnDuration=50
            PulseWidthDuration=500
            RampOffDuration=50
        -> MulticastSubject QuacMessages => #15
        #1, #3, #5, #7, #9, #11, #13, #15 -> Concat
        -> TakeLast(Count=1)
        -> Delay(DueTime=PT0.01S)
        -> WorkflowOutput
    -> Delay(DueTime=PT1S)
    -> FloatProperty(Value=0) => #4
    Defer "Send Trigger on DO0"(Description="Send Trigger on DO0")
        Disable WorkflowInput Source1
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateDOPortSetPayload(DOPortSet=DO0))
        -> MulticastSubject QuacMessages
        -> Delay(DueTime=PT0.001S)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateDOPortClearPayload(DOPortClear=DO0))
        -> MulticastSubject QuacMessages
        -> WorkflowOutput
    -> Delay(DueTime=PT11S)
    -> FloatProperty(Value=0) => #7
    #1, #4, #7 -> Concat
    -> TakeLast(Count=1)
    -> WorkflowOutput
-> FloatProperty(Value=0) => #28
Annotation "Reset to 0V"(Text="Reset to 0V")
-> IncludeWorkflow(Path=Extensions\ResetAllAO.bonsai)
-> Delay(DueTime=PT0.1S)
-> Take(Count=1)
-> FloatProperty(Value=0) => #33
Annotation "Playback from SD short"(Text="Playback from SD short")
-> Defer "SDPlayback short waveform"
    Annotation "Configure for Latency Check"(Text="Configure for Latency Check")
    -> Defer "Configure All AOs triggered from DI0" => #1
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreatePinModeDI0Payload(PinModeDI0=ExternalTrigger))
        -> MulticastSubject QuacMessages => #1
        Annotation "Incorrectly lists AOs as DIs"(Text="Incorrectly lists AOs as DIs")
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateAOChannelsAssignedToDI0Payload(AOChannelsAssignedToDI0="DI0 DI1 DI2 DI3"))
        -> MulticastSubject QuacMessages => #4
        #1, #4 -> Concat
        -> TakeLast(Count=1)
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    Defer ConfigureFilePlaybackAllChannels
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings0Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=channel_0_short.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #2
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings1Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=channel_1_short.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #5
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings2Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=channel_2_short.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #8
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings3Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=channel_3_short.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #11
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer0Payload(ActivePlayer0=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #14
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer1Payload(ActivePlayer1=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #17
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer2Payload(ActivePlayer2=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #20
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer3Payload(ActivePlayer3=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #23
        #2, #5, #8, #11, #14, #17, #20, #23 -> Concat
        -> TakeLast(Count=1)
        -> Delay(DueTime=PT0.01S)
        -> WorkflowOutput
    -> Delay(DueTime=PT1S)
    -> FloatProperty(Value=0) => #4
    Defer "Send Trigger on DO0"(Description="Send Trigger on DO0") => #5
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateDOPortSetPayload(DOPortSet=DO0))
        -> MulticastSubject QuacMessages
        -> Delay(DueTime=PT0.001S)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateDOPortClearPayload(DOPortClear=DO0))
        -> MulticastSubject QuacMessages
        -> WorkflowOutput
    FloatProperty(Value=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds((200.0 / 2000.0) + 0.5)
    -> PropertyMapping(DueTime) => #8
    #5, #8 -> Delay(DueTime=PT0.6S)
    -> FloatProperty(Value=0) => #10
    #1, #4, #10 -> Concat
    -> TakeLast(Count=1)
    -> WorkflowOutput

    Disable Defer ConfigureFilePlaybackAllChannels
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer0Payload(ActivePlayer0=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #2
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer1Payload(ActivePlayer1=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #5
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer2Payload(ActivePlayer2=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #8
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer3Payload(ActivePlayer3=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #11
        #2, #5, #8, #11 -> Concat
        -> TakeLast(Count=1) => #13
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings0Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=Channel0.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #16
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings1Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=Channel1.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #19
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings2Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=Channel2.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #22
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings3Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=Channel3.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #25
        #16, #19, #22, #25 -> Concat
        -> TakeLast(Count=1) => #27
        #13, #27 -> Concat
        -> TakeLast(Count=1)
        -> Delay(DueTime=PT0.01S)
        -> WorkflowOutput
-> FloatProperty(Value=0) => #36
Annotation "Playback from SD long"(Text="Playback from SD long")
-> Defer "SDPlayback long waveform"
    Annotation "Configure for Latency Check"(Text="Configure for Latency Check")
    -> Defer "Configure All AOs triggered from DI0" => #1
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreatePinModeDI0Payload(PinModeDI0=ExternalTrigger))
        -> MulticastSubject QuacMessages => #1
        Annotation "Incorrectly lists AOs as DIs"(Text="Incorrectly lists AOs as DIs")
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateAOChannelsAssignedToDI0Payload(AOChannelsAssignedToDI0="DI0 DI1 DI2 DI3"))
        -> MulticastSubject QuacMessages => #4
        #1, #4 -> Concat
        -> TakeLast(Count=1)
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    Defer ConfigureFilePlaybackAllChannels
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings0Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=channel_0_long.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #2
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings1Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=channel_1_long.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #5
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings2Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=channel_2_long.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #8
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings3Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=channel_3_long.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #11
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer0Payload(ActivePlayer0=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #14
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer1Payload(ActivePlayer1=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #17
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer2Payload(ActivePlayer2=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #20
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer3Payload(ActivePlayer3=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #23
        #2, #5, #8, #11, #14, #17, #20, #23 -> Concat
        -> TakeLast(Count=1)
        -> Delay(DueTime=PT0.01S)
        -> WorkflowOutput
    -> Delay(DueTime=PT1S)
    -> FloatProperty(Value=0) => #4
    Defer "Send Trigger on DO0"(Description="Send Trigger on DO0") => #5
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateDOPortSetPayload(DOPortSet=DO0))
        -> MulticastSubject QuacMessages
        -> Delay(DueTime=PT0.001S)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateDOPortClearPayload(DOPortClear=DO0))
        -> MulticastSubject QuacMessages
        -> WorkflowOutput
    FloatProperty(Value=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds((10000.0 / 2000.0) + 0.5)
    -> PropertyMapping(DueTime) => #8
    #5, #8 -> Delay(DueTime=PT5.5S)
    -> FloatProperty(Value=0) => #10
    #1, #4, #10 -> Concat
    -> TakeLast(Count=1)
    -> WorkflowOutput

    Disable Defer ConfigureFilePlaybackAllChannels
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer0Payload(ActivePlayer0=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #2
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer1Payload(ActivePlayer1=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #5
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer2Payload(ActivePlayer2=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #8
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer3Payload(ActivePlayer3=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #11
        #2, #5, #8, #11 -> Concat
        -> TakeLast(Count=1) => #13
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings0Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=Channel0.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #16
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings1Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=Channel1.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #19
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings2Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=Channel2.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #22
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings3Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=Channel3.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #25
        #16, #19, #22, #25 -> Concat
        -> TakeLast(Count=1) => #27
        #13, #27 -> Concat
        -> TakeLast(Count=1)
        -> Delay(DueTime=PT0.01S)
        -> WorkflowOutput
-> FloatProperty(Value=0) => #39
Annotation "Playback from SD sine"(Text="Playback from SD sine")
-> Defer "SDPlayback sine waveform"
    Annotation "Configure for Latency Check"(Text="Configure for Latency Check")
    -> Defer "Configure All AOs triggered from DI0" => #1
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreatePinModeDI0Payload(PinModeDI0=ExternalTrigger))
        -> MulticastSubject QuacMessages => #1
        Annotation "Incorrectly lists AOs as DIs"(Text="Incorrectly lists AOs as DIs")
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateAOChannelsAssignedToDI0Payload(AOChannelsAssignedToDI0="DI0 DI1 DI2 DI3"))
        -> MulticastSubject QuacMessages => #4
        #1, #4 -> Concat
        -> TakeLast(Count=1)
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    Defer ConfigureFilePlaybackAllChannels
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings0Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=channel_0_sine.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #2
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings1Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=channel_1_sine.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #5
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings2Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=channel_2_sine.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #8
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings3Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=channel_3_sine.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #11
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer0Payload(ActivePlayer0=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #14
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer1Payload(ActivePlayer1=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #17
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer2Payload(ActivePlayer2=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #20
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer3Payload(ActivePlayer3=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #23
        #2, #5, #8, #11, #14, #17, #20, #23 -> Concat
        -> TakeLast(Count=1)
        -> Delay(DueTime=PT0.01S)
        -> WorkflowOutput
    -> Delay(DueTime=PT1S)
    -> FloatProperty(Value=0) => #4
    Defer "Send Trigger on DO0"(Description="Send Trigger on DO0") => #5
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateDOPortSetPayload(DOPortSet=DO0))
        -> MulticastSubject QuacMessages
        -> Delay(DueTime=PT0.001S)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateDOPortClearPayload(DOPortClear=DO0))
        -> MulticastSubject QuacMessages
        -> WorkflowOutput
    FloatProperty(Value=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds((10000.0 / 2000.0) + 0.5)
    -> PropertyMapping(DueTime) => #8
    #5, #8 -> Delay(DueTime=PT5.5S)
    -> FloatProperty(Value=0) => #10
    #1, #4, #10 -> Concat
    -> TakeLast(Count=1)
    -> WorkflowOutput

    Disable Defer ConfigureFilePlaybackAllChannels
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer0Payload(ActivePlayer0=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #2
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer1Payload(ActivePlayer1=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #5
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer2Payload(ActivePlayer2=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #8
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer3Payload(ActivePlayer3=File))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #11
        #2, #5, #8, #11 -> Concat
        -> TakeLast(Count=1) => #13
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings0Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=Channel0.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #16
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings1Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=Channel1.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #19
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings2Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=Channel2.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #22
        AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateFileSettings3Payload(Cycles=1, Duration=0, UpdateFrequency=500000, Path=Channel3.bin))
        -> MulticastSubject QuacMessages
        -> FloatProperty(Value=0) => #25
        #16, #19, #22, #25 -> Concat
        -> TakeLast(Count=1) => #27
        #13, #27 -> Concat
        -> TakeLast(Count=1)
        -> Delay(DueTime=PT0.01S)
        -> WorkflowOutput
-> FloatProperty(Value=0) => #42
Annotation "Reset to 0V"(Text="Reset to 0V")
-> IncludeWorkflow(Path=Extensions\ResetAllAO.bonsai)
-> Delay(DueTime=PT0.1S)
-> Take(Count=1)
-> FloatProperty(Value=0) => #47
Annotation "Voltage steps to test linearity"(Text="Voltage steps to test linearity")
-> Timer(DueTime=PT0.1S, Period=PT0.01S)
-> Take(Count=2001)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: float(it) * 0.01 - 10
-> SelectMany "Update Voltage Steps"(Description="Update Voltage Steps")
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject NewLevel

    SubscribeSubject NewLevel
    -> PropertyMapping(AOChannel0)
    -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateAOChannel0Payload(AOChannel0=10))
    -> MulticastSubject QuacMessages => #6
    SubscribeSubject NewLevel
    -> PropertyMapping(AOChannel1)
    -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateAOChannel1Payload(AOChannel1=10))
    -> MulticastSubject QuacMessages => #10
    SubscribeSubject NewLevel
    -> PropertyMapping(AOChannel2)
    -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateAOChannel2Payload(AOChannel2=10))
    -> MulticastSubject QuacMessages => #14
    SubscribeSubject NewLevel
    -> PropertyMapping(AOChannel3)
    -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateAOChannel3Payload(AOChannel3=10))
    -> MulticastSubject QuacMessages => #18
    #6, #10, #14, #18 -> Concat
    -> Disable Delay(DueTime=PT0.01S)
    -> WorkflowOutput
-> Delay(DueTime=PT0.1S)
-> FloatProperty(Value=0) => #54
Annotation "Reset to 0V"(Text="Reset to 0V")
-> IncludeWorkflow(Path=Extensions\ResetAllAO.bonsai)
-> Delay(DueTime=PT0.1S)
-> Take(Count=1)
-> FloatProperty(Value=0) => #59
FloatProperty(Value=0)
-> Take(Count=1)
-> SelectMany "Check Single Channel CrossTalk" => #62
    Defer ConfigureActivePlayerForAllAOs
        ExternalizedMapping(Value(DisplayName=ActivePlayer0))
        -> PropertySource<AllenNeuralDynamics.Quac.CreateActivePlayer0Payload,AllenNeuralDynamics.Quac.PlayerType>(MemberName=ActivePlayer0, Value=Sine)
        -> Take(Count=1)
        -> AsyncSubject ActivePlayer

        SubscribeSubject ActivePlayer
        -> PropertyMapping(ActivePlayer0)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer0Payload(ActivePlayer0=Sine))
        -> MulticastSubject QuacMessages => #7
        SubscribeSubject ActivePlayer
        -> PropertyMapping(ActivePlayer1)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer1Payload(ActivePlayer1=Sine))
        -> MulticastSubject QuacMessages => #11
        SubscribeSubject ActivePlayer
        -> PropertyMapping(ActivePlayer2)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer2Payload(ActivePlayer2=Sine))
        -> MulticastSubject QuacMessages => #15
        SubscribeSubject ActivePlayer
        -> PropertyMapping(ActivePlayer3)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer3Payload(ActivePlayer3=Sine))
        -> MulticastSubject QuacMessages => #19
        #7, #11, #15, #19 -> Concat
        -> TakeLast(Count=1)
        -> WorkflowOutput
    -> FloatProperty(Value=0) => #1
    IncludeWorkflow(Path=Extensions\ResetAllAO.bonsai)
    -> Delay(DueTime=PT0.1S)
    -> Take(Count=1)
    -> FloatProperty(Value=0) => #5
    Annotation "Check CrossTalk"(Text="Check CrossTalk")
    -> IncludeWorkflow(Path=Extensions\SingleChannelSinewave.bonsai, AO-Channel=AO0, Frequency=2000)
    -> Take(Count=1)
    -> FloatProperty(Value=0) => #9
    IncludeWorkflow(Path=Extensions\ResetAllAO.bonsai)
    -> Delay(DueTime=PT0.1S)
    -> Take(Count=1)
    -> FloatProperty(Value=0) => #13
    Annotation "Check CrossTalk"(Text="Check CrossTalk")
    -> IncludeWorkflow(Path=Extensions\SingleChannelSinewave.bonsai, AO-Channel=AO1, Frequency=2000)
    -> Take(Count=1)
    -> FloatProperty(Value=0) => #17
    IncludeWorkflow(Path=Extensions\ResetAllAO.bonsai)
    -> Delay(DueTime=PT0.1S)
    -> Take(Count=1)
    -> FloatProperty(Value=0) => #21
    Annotation "Check CrossTalk"(Text="Check CrossTalk")
    -> IncludeWorkflow(Path=Extensions\SingleChannelSinewave.bonsai, AO-Channel=AO2, Frequency=2000)
    -> Take(Count=1)
    -> FloatProperty(Value=0) => #25
    IncludeWorkflow(Path=Extensions\ResetAllAO.bonsai)
    -> Delay(DueTime=PT0.1S)
    -> Take(Count=1)
    -> FloatProperty(Value=0) => #29
    Annotation "Check CrossTalk"(Text="Check CrossTalk")
    -> IncludeWorkflow(Path=Extensions\SingleChannelSinewave.bonsai, AO-Channel=AO3, Frequency=2000)
    -> Take(Count=1)
    -> FloatProperty(Value=0) => #33
    IncludeWorkflow(Path=Extensions\ResetAllAO.bonsai)
    -> Delay(DueTime=PT0.1S)
    -> Take(Count=1)
    -> FloatProperty(Value=0) => #37
    #1, #5, #9, #13, #17, #21, #25, #29, #33, #37 -> Concat
    -> TakeLast(Count=1)
    -> FloatProperty(Value=0)
    -> WorkflowOutput
Annotation "Reset to 0V"(Text="Reset to 0V")
-> IncludeWorkflow(Path=Extensions\ResetAllAO.bonsai)
-> Delay(DueTime=PT0.1S)
-> Take(Count=1)
-> FloatProperty(Value=0) => #67
FloatProperty(Value=0)
-> Take(Count=1)
-> SelectMany "All Channel Playbacks" => #70
    Defer ConfigureActivePlayerForAllAOs
        ExternalizedMapping(Value(DisplayName=ActivePlayer0))
        -> PropertySource<AllenNeuralDynamics.Quac.CreateActivePlayer0Payload,AllenNeuralDynamics.Quac.PlayerType>(MemberName=ActivePlayer0, Value=Sine)
        -> Take(Count=1)
        -> AsyncSubject ActivePlayer

        SubscribeSubject ActivePlayer
        -> PropertyMapping(ActivePlayer0)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer0Payload(ActivePlayer0=Sine))
        -> MulticastSubject QuacMessages => #7
        SubscribeSubject ActivePlayer
        -> PropertyMapping(ActivePlayer1)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer1Payload(ActivePlayer1=Sine))
        -> MulticastSubject QuacMessages => #11
        SubscribeSubject ActivePlayer
        -> PropertyMapping(ActivePlayer2)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer2Payload(ActivePlayer2=Sine))
        -> MulticastSubject QuacMessages => #15
        SubscribeSubject ActivePlayer
        -> PropertyMapping(ActivePlayer3)
        -> AllenNeuralDynamics.Quac.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Quac.CreateActivePlayer3Payload(ActivePlayer3=Sine))
        -> MulticastSubject QuacMessages => #19
        #7, #11, #15, #19 -> Concat
        -> TakeLast(Count=1)
        -> WorkflowOutput
    -> Take(Count=1) => #1
    Annotation "Check fidelity"(Text="Check fidelity")
    -> IncludeWorkflow(Path=Extensions\AllChannelSinewave.bonsai, Frequency=2000)
    -> Delay(DueTime=PT0.5S)
    -> Take(Count=1) => #5
    IncludeWorkflow(Path=Extensions\AllChannelSinewave.bonsai, Frequency=20000)
    -> Delay(DueTime=PT0.5S)
    -> Take(Count=1) => #8
    IncludeWorkflow(Path=Extensions\AllChannelSinewave.bonsai, Frequency=100000)
    -> Delay(DueTime=PT0.5S)
    -> Take(Count=1) => #11
    #1, #5, #8, #11 -> Concat
    -> TakeLast(Count=1)
    -> FloatProperty(Value=0)
    -> WorkflowOutput
Annotation "Reset to 0V"(Text="Reset to 0V")
-> IncludeWorkflow(Path=Extensions\ResetAllAO.bonsai)
-> Delay(DueTime=PT0.1S)
-> Take(Count=1)
-> FloatProperty(Value=0) => #75
Annotation "Keep recording background signal for a bit"(Text="Keep recording background signal for a bit")
-> Timer(DueTime=PT5S)
-> Take(Count=1)
-> FloatProperty(Value=0) => #79
#22, #25, #28, #33, #36, #39, #42, #47, #54, #59, #62, #67, #70, #75, #79 -> Concat
-> TakeLast(Count=1)
-> WorkflowOutput
